<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Docs</Name>
        <Description>Workflow for control odor task

WHEN RUNNING, ENTER VISUALISES THE OUTPUT OF A NODE,
CTRL+ ENTER/DOUBLE CLICK OPENS THE NODE

** datafilename** 
Init sequence for creating filename. 
Save Directory: string: dir to use (use absolute paths)
Filename: string: filename excluding extension. Must be unique as overwrite is disabled

**OnTime**
Init for setting odor on time
OnTime:  float (seconds)

**ISI**
Init for setting inter stimulus interval
ISI: Float (seconds)

**Response Window**
Init for setting response window duration
ResponseWindow: Float (seconds)

**ValveTime**
Init for setting reward valve open duration
ValveTime; Float (seconds)

**TrialCounter**
Init trialcounter to 0. Don't change

**TrialOdorPair**
Sequence for picking random odor pair
New pair set generated every n trials. n = len(odorpairset)
Zip picks next odor pair for the next trial

**LaserTrial**
Sequence to choose laser on or off trial
Random laser pick gens rand float between 0,1 
Prooportion of laser trials set by laser prob (click group to set)

**CsvWriter**
Sequence saves next line of arduino states to csv
Will start when session is triggered (Ctrl+Space), end (Ctrl+Shift+Space)
Sample rate is 100 Hz (Can be changed in Arduino Inputs group)
Bonsai will crash if duplicate file name used

**Trial Sequence** ( Do not change)
Sequence for present odors, reward
Will repeat after every trial until session is ended (Ctrl+Shift+Space)

</Description>
        <Workflow>
          <Nodes />
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Arduino Outputs</Name>
        <Description>Init outputs
Arduino pins and COM port can be changed here</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>odorADO</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>odorBDO</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>odorCDO</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>odorDDO</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>valveDO</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>LaserTrial</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>odorADO</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM12</ard:PortName>
                <ard:Pin>3</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>odorBDO</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM12</ard:PortName>
                <ard:Pin>4</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>odorCDO</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM12</ard:PortName>
                <ard:Pin>5</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>odorDDO</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM12</ard:PortName>
                <ard:Pin>6</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>valveDO</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM12</ard:PortName>
                <ard:Pin>7</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>laserAO</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>laserAO</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:AnalogOutput">
                <ard:PortName>COM12</ard:PortName>
                <ard:Pin>9</ard:Pin>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Arduino Inputs</Name>
        <Description>Init vars for saving current states + lick state
Sace samplerate can be changed here</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>LickAI</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:AnalogInput">
                <ard:PortName>COM12</ard:PortName>
                <ard:Pin>14</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LickAI</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.01S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>odorADO</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToInt32(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>odorBDO</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToInt32(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>odorCDO</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToInt32(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>odorDDO</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToInt32(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>valveDO</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToInt32(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>laserAO</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToInt32(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LickAI</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>arduinostates</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:DelaySubscription">
                  <rx:DueTime>PT2S</rx:DueTime>
                </Combinator>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="19" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="18" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="18" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="18" Label="Source3" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="18" Label="Source4" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="18" Label="Source5" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="18" Label="Source6" />
            <Edge From="17" To="18" Label="Source7" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Save Directory" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Users\MacAskill_1\Desktop</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Filename" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>test2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}\{1}.csv</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>datafilename</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="On Time" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>On Time</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="ISI" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>10</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ISI</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="ResponseWindow" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>5</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ResponseWindow</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="ValveTime" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0.1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ValveTime</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>TrialCounter</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialCounter</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialCounter</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Odor Pair Set" />
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="al:StopSource,sys:String[]">
        <MemberName>SourceName</MemberName>
        <Value>
          <string>AB</string>
          <string>BA</string>
          <string>AC</string>
          <string>CA</string>
          <string>BC</string>
          <string>CB</string>
        </Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Expression>Item1%Item2.Length==0</scr:Expression>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Create Permuated set</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:SelectPermutation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>TrialOdorPair</Name>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Random Laser Pick</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Laser Trial Probability" />
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Laser</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="LessThanOrEqual">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0.5</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>No Laser</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0.5</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="2" To="5" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>LaserTrial</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>datafilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space Shift Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>arduinostates</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Timestamp,Value</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Value.Item1 as odorA,
Value.Item2 as odorB,
Value.Item3 as odorC,
Value.Item4 as odorD,
Value.Item5 as valve,
Value.Item6 as laser,
Value.Item7 as spout,
Timestamp.TimeOfDay as time,
Timestamp as time_ticks
)</scr:Expression>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\MacAskill_1\Desktop\test2.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Turn Off</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorADO</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorBDO</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorCDO</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorDDO</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>ISI</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>TimeFromSecs</scr:Name>
        <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>On Time</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>TimeFromSecs</scr:Name>
        <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ResponseWindow</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>TimeFromSecs</scr:Name>
        <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>On Time</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>TimeFromSecs</scr:Name>
        <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ISI</Name>
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="FloatProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>TimeFromSecs</scr:Name>
        <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space Shift Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialOdorPair</Name>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Ramp Laser on</Name>
        <Description>Laser ramp time total = period*10</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Period" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.0025S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="MulticastSubject">
              <Name>laserAO</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Fully On</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual">
                    <Operand xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LaserTrial</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.25S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LaserTrial</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>10</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="16" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="15" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Deliver Odor1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Char">
                      <Value>65</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorADO</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Char">
                      <Value>66</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorBDO</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Char">
                      <Value>67</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorCDO</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Char">
                      <Value>68</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorDDO</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="1" To="11" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="14" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="14" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="14" Label="Source3" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source4" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Turn Off</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorADO</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorBDO</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorCDO</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorDDO</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Deliver Odor2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Char">
                      <Value>65</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorADO</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Char">
                      <Value>66</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorBDO</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Char">
                      <Value>67</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorCDO</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Char">
                      <Value>68</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorDDO</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="1" To="11" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="14" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="14" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="14" Label="Source3" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source4" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Turn Off </Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorADO</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorBDO</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorCDO</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>odorDDO</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Deliver Reward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Rewarded Pair?</Name>
              <Description>Check if pair is to be rewarded</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialOdorPair</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>AB</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>BC</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="LogicalOr" />
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>CA</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="LogicalOr" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>valveDO</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Unrewarded Pair?</Name>
              <Description>Check if pair is to be rewarded</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialOdorPair</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>BA</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>CB</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="LogicalOr" />
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>AC</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="LogicalOr" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>valveDO</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ValveTime</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>TimeFromSecs</scr:Name>
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>valveDO</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="11" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Ramp Laser down</Name>
        <Description>Laser ramp time total = period*10</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Period" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.0025S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LaserTrial</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.25S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LaserTrial</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="MulticastSubject">
              <Name>laserAO</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Fully On</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual">
                    <Operand xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>10</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="12" Label="Source2" />
            <Edge From="3" To="19" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="17" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="18" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT4S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Repeat</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialCounter</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="33" Label="Source2" />
      <Edge From="26" To="29" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="38" To="46" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="45" Label="Source2" />
      <Edge From="41" To="47" Label="Source2" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="79" Label="Source2" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="77" Label="Source2" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="85" Label="Source2" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="83" Label="Source2" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="65" To="66" Label="Source1" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="67" To="88" Label="Source2" />
      <Edge From="68" To="90" Label="Source2" />
      <Edge From="69" To="91" Label="Source2" />
      <Edge From="70" To="71" Label="Source1" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="72" To="73" Label="Source1" />
      <Edge From="73" To="74" Label="Source1" />
      <Edge From="74" To="75" Label="Source1" />
      <Edge From="74" To="76" Label="Source1" />
      <Edge From="75" To="80" Label="Source2" />
      <Edge From="76" To="77" Label="Source1" />
      <Edge From="77" To="78" Label="Source1" />
      <Edge From="78" To="79" Label="Source1" />
      <Edge From="79" To="80" Label="Source1" />
      <Edge From="80" To="81" Label="Source1" />
      <Edge From="81" To="82" Label="Source1" />
      <Edge From="82" To="83" Label="Source1" />
      <Edge From="83" To="84" Label="Source1" />
      <Edge From="84" To="85" Label="Source1" />
      <Edge From="85" To="86" Label="Source1" />
      <Edge From="86" To="87" Label="Source1" />
      <Edge From="87" To="88" Label="Source1" />
      <Edge From="88" To="89" Label="Source1" />
      <Edge From="89" To="90" Label="Source1" />
      <Edge From="90" To="91" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>